# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments HDAWG SeqPy

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_HDAWG_Seqpy
support_arm: False
support_hardware_loop: False
startup : Do nothing

interface: Other

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

signal_generator: True

# List of models supported by this driver
model_str_1: HDAWG8 (basic)
model_str_2: HDAWG8 (advanced)

check_option: False

# option not purchased
# option_str_1: PC
# option_str_2: CNT

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#########################################
# SECTION: Setup
# GROUP: Device

[Device - Reference Clock]
label: Reference Clock
datatype: COMBO
section: Setup
group: Device
def_value: Internal
show_in_measurement_dlg: True
tooltip: <html><head/><body><p>Reference clock source.<br/><b>system/clocks/referenceclock/source</b></p></body></html>
set_cmd: /system/clocks/referenceclock/source
get_cmd: /system/clocks/referenceclock/source
cmd_def_1: 0
combo_def_1: Internal
cmd_def_2: 1
combo_def_2: External
cmd_def_3: 2
combo_def_3: ZSync

[Device - Sample Clock]
label: Sample Clock
datatype: DOUBLE
section: Setup
group: Device
def_value: 2.4e9
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Indicates the frequency of the sample clock. Changing the sample clock temporarily interrupts the AWG sequencers.<br/><b>system/clocks/sampleclock/freq</b></p></body></html>
set_cmd: /system/clocks/sampleclock/freq
get_cmd: /system/clocks/sampleclock/freq

#########################################
# SECTION: Outputs
# GROUP: Output 1

[Output 1 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 1
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/0/offset</b></p></body></html>
set_cmd: /sigouts/0/offset
get_cmd: /sigouts/0/offset

[Output 1 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 1
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/0/delay</b></p></body></html>
set_cmd: /sigouts/0/delay
get_cmd: /sigouts/0/delay

[Output 1 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/0/direct</b></p></body></html>
set_cmd: /sigouts/0/direct
get_cmd: /sigouts/0/direct


[Output 1 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 1
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/0/range</b></p></body></html>
set_cmd: /sigouts/0/range
get_cmd: /sigouts/0/range
state_quant: Output 1 - Direct
state_value_1: false

[Output 1 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/0/filter</b></p></body></html>
set_cmd: /sigouts/0/filter
get_cmd: /sigouts/0/filter
state_quant: Output 1 - Direct
state_value_1: false

#########################################
# SECTION: Outputs
# GROUP: Output 2

[Output 2 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 2
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/1/offset</b></p></body></html>
set_cmd: /sigouts/1/offset
get_cmd: /sigouts/1/offset

[Output 2 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 2
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/1/delay</b></p></body></html>
set_cmd: /sigouts/1/delay
get_cmd: /sigouts/1/delay

[Output 2 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/1/direct</b></p></body></html>
set_cmd: /sigouts/1/direct
get_cmd: /sigouts/1/direct

[Output 2 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 2
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/1/range</b></p></body></html>
set_cmd: /sigouts/1/range
get_cmd: /sigouts/1/range
state_quant: Output 2 - Direct
state_value_1: false

[Output 2 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/1/filter</b></p></body></html>
set_cmd: /sigouts/1/filter
get_cmd: /sigouts/1/filter
state_quant: Output 2 - Direct
state_value_1: false


#########################################
# SECTION: Outputs
# GROUP: Output 3

[Output 3 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 3
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/2/offset</b></p></body></html>
set_cmd: /sigouts/2/offset
get_cmd: /sigouts/2/offset

[Output 3 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 3
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/2/delay</b></p></body></html>
set_cmd: /sigouts/2/delay
get_cmd: /sigouts/2/delay

[Output 3 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/2/direct</b></p></body></html>
set_cmd: /sigouts/2/direct
get_cmd: /sigouts/2/direct


[Output 3 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 3
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/2/range</b></p></body></html>
set_cmd: /sigouts/2/range
get_cmd: /sigouts/2/range
state_quant: Output 3 - Direct
state_value_1: false

[Output 3 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/2/filter</b></p></body></html>
set_cmd: /sigouts/2/filter
get_cmd: /sigouts/2/filter
state_quant: Output 3 - Direct
state_value_1: false

#########################################
# SECTION: Output 3-4
# GROUP: Output 4

[Output 4 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 4
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/3/offset</b></p></body></html>
set_cmd: /sigouts/3/offset
get_cmd: /sigouts/3/offset

[Output 4 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 4
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/3/delay</b></p></body></html>
set_cmd: /sigouts/3/delay
get_cmd: /sigouts/3/delay

[Output 4 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 4
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/3/direct</b></p></body></html>
set_cmd: /sigouts/3/direct
get_cmd: /sigouts/3/direct

[Output 4 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 4
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/3/range</b></p></body></html>
set_cmd: /sigouts/3/range
get_cmd: /sigouts/3/range
state_quant: Output 4 - Direct
state_value_1: false

[Output 4 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 4
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/3/filter</b></p></body></html>
set_cmd: /sigouts/3/filter
get_cmd: /sigouts/3/filter
state_quant: Output 4 - Direct
state_value_1: false

#########################################
# SECTION: Outputs
# GROUP: Output 5

[Output 5 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 5
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/4/offset</b></p></body></html>
set_cmd: /sigouts/4/offset
get_cmd: /sigouts/4/offset

[Output 5 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 5
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/4/delay</b></p></body></html>
set_cmd: /sigouts/4/delay
get_cmd: /sigouts/4/delay

[Output 5 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 5
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/4/direct</b></p></body></html>
set_cmd: /sigouts/4/direct
get_cmd: /sigouts/4/direct


[Output 5 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 5
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/4/range</b></p></body></html>
set_cmd: /sigouts/4/range
get_cmd: /sigouts/4/range
state_quant: Output 5 - Direct
state_value_1: false

[Output 5 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 5
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/4/filter</b></p></body></html>
set_cmd: /sigouts/4/filter
get_cmd: /sigouts/4/filter
state_quant: Output 5 - Direct
state_value_1: false

#########################################
# SECTION: Outputs
# GROUP: Output 6

[Output 6 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 6
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/5/offset</b></p></body></html>
set_cmd: /sigouts/5/offset
get_cmd: /sigouts/5/offset

[Output 6 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 6
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/5/delay</b></p></body></html>
set_cmd: /sigouts/5/delay
get_cmd: /sigouts/5/delay

[Output 6 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 6
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/5/direct</b></p></body></html>
set_cmd: /sigouts/5/direct
get_cmd: /sigouts/5/direct


[Output 6 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 6
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/5/range</b></p></body></html>
set_cmd: /sigouts/5/range
get_cmd: /sigouts/5/range
state_quant: Output 6 - Direct
state_value_1: false

[Output 6 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 6
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/5/filter</b></p></body></html>
set_cmd: /sigouts/5/filter
get_cmd: /sigouts/5/filter
state_quant: Output 6 - Direct
state_value_1: false

#########################################
# SECTION: Outputs
# GROUP: Output 7

[Output 7 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 7
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/6/offset</b></p></body></html>
set_cmd: /sigouts/6/offset
get_cmd: /sigouts/6/offset

[Output 7 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 7
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/6/delay</b></p></body></html>
set_cmd: /sigouts/6/delay
get_cmd: /sigouts/6/delay

[Output 7 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 7
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/6/direct</b></p></body></html>
set_cmd: /sigouts/6/direct
get_cmd: /sigouts/6/direct


[Output 7 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 7
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/6/range</b></p></body></html>
set_cmd: /sigouts/6/range
get_cmd: /sigouts/6/range
state_quant: Output 7 - Direct
state_value_1: false

[Output 7 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 7
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/6/filter</b></p></body></html>
set_cmd: /sigouts/6/filter
get_cmd: /sigouts/6/filter
state_quant: Output 7 - Direct
state_value_1: false

#########################################
# SECTION: Outputs
# GROUP: Output 8

[Output 8 - Offset]
label: Offset
datatype: DOUBLE
section: Outputs
group: Output 8
def_value: 0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the DC voltage that is added to the dynamic part of the output signal.<br/><b>sigouts/7/offset</b></p></body></html>
set_cmd: /sigouts/7/offset
get_cmd: /sigouts/7/offset

[Output 8 - Delay]
label: Delay
datatype: DOUBLE
section: Outputs
group: Output 8
def_value: 0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>This value allows to delay the output of the signal in order to align waves.<br/><b>sigouts/7/delay</b></p></body></html>
set_cmd: /sigouts/7/delay
get_cmd: /sigouts/7/delay

[Output 8 - Direct]
label: Direct
datatype: BOOLEAN
section: Outputs
group: Output 8
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the direct output path. If enabled the signal will be fed directly from the DAC, reducing delay and noise. However, the range will be fixed and offset is not available any more.<br/><b>sigouts/7/direct</b></p></body></html>
set_cmd: /sigouts/7/direct
get_cmd: /sigouts/7/direct

[Output 8 - Range]
label: Range
datatype: DOUBLE
section: Outputs
group: Output 8
def_value: 1
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the output voltage range. The instrument selects the next higher available range.<br/><b>sigouts/7/range</b></p></body></html>
set_cmd: /sigouts/7/range
get_cmd: /sigouts/7/range
state_quant: Output 8 - Direct
state_value_1: false

[Output 8 - Filter]
label: Filter
datatype: BOOLEAN
section: Outputs
group: Output 8
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables a filter stage in the amplified path.<br/><b>sigouts/7/filter</b></p></body></html>
set_cmd: /sigouts/7/filter
get_cmd: /sigouts/7/filter
state_quant: Output 8 - Direct
state_value_1: false

#########################################
# SECTION: Oscillators
# GROUP: Oscillators

[Oscillators - advanced]
section: Oscillator/Sines
group: Oscillators
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
combo_def_10: 9
combo_def_11: 10
combo_def_12: 11
combo_def_13: 12
combo_def_14: 13
combo_def_15: 14
combo_def_16: 15
combo_def_17: 16
def_value: 1
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 1]
label: Frequency 1
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/0/freq</b></p></body></html>
set_cmd: /oscs/0/freq
get_cmd: /oscs/0/freq
state_quant: Oscillators - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
state_value_9: 9
state_value_10: 10
state_value_11: 11
state_value_12: 12
state_value_13: 13
state_value_14: 14
state_value_15: 15
state_value_16: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 2]
label: Frequency 2
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/1/freq</b></p></body></html>
set_cmd: /oscs/1/freq
get_cmd: /oscs/1/freq
state_quant: Oscillators - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
state_value_8: 9
state_value_9: 10
state_value_10: 11
state_value_11: 12
state_value_12: 13
state_value_13: 14
state_value_14: 15
state_value_15: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 3]
label: Frequency 3
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/2/freq</b></p></body></html>
set_cmd: /oscs/2/freq
get_cmd: /oscs/2/freq
state_quant: Oscillators - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
state_value_7: 9
state_value_8: 10
state_value_9: 11
state_value_10: 12
state_value_11: 13
state_value_12: 14
state_value_13: 15
state_value_14: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 4]
label: Frequency 4
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/3/freq</b></p></body></html>
set_cmd: /oscs/3/freq
get_cmd: /oscs/3/freq
state_quant: Oscillators - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
state_value_6: 9
state_value_7: 10
state_value_8: 11
state_value_9: 12
state_value_10: 13
state_value_11: 14
state_value_12: 15
state_value_13: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 5]
label: Frequency 5
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/4/freq</b></p></body></html>
set_cmd: /oscs/4/freq
get_cmd: /oscs/4/freq
state_quant: Oscillators - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
state_value_5: 9
state_value_6: 10
state_value_7: 11
state_value_8: 12
state_value_9: 13
state_value_10: 14
state_value_11: 15
state_value_12: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 6]
label: Frequency 6
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/5/freq</b></p></body></html>
set_cmd: /oscs/5/freq
get_cmd: /oscs/5/freq
state_quant: Oscillators - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
state_value_4: 9
state_value_5: 10
state_value_6: 11
state_value_7: 12
state_value_8: 13
state_value_9: 14
state_value_10: 15
state_value_11: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 7]
label: Frequency 7
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/6/freq</b></p></body></html>
set_cmd: /oscs/6/freq
get_cmd: /oscs/6/freq
state_quant: Oscillators - advanced
state_value_1: 7
state_value_2: 8
state_value_3: 9
state_value_4: 10
state_value_5: 11
state_value_6: 12
state_value_7: 13
state_value_8: 14
state_value_9: 15
state_value_10: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 8]
label: Frequency 8
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/7/freq</b></p></body></html>
set_cmd: /oscs/7/freq
get_cmd: /oscs/7/freq
state_quant: Oscillators - advanced
state_value_1: 8
state_value_2: 9
state_value_3: 10
state_value_4: 11
state_value_5: 12
state_value_6: 13
state_value_7: 14
state_value_8: 15
state_value_9: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 9]
label: Frequency 9
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/8/freq</b></p></body></html>
set_cmd: /oscs/8/freq
get_cmd: /oscs/8/freq
state_quant: Oscillators - advanced
state_value_1: 9
state_value_2: 10
state_value_3: 11
state_value_4: 12
state_value_5: 13
state_value_6: 14
state_value_7: 15
state_value_8: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 10]
label: Frequency 10
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/9/freq</b></p></body></html>
set_cmd: /oscs/9/freq
get_cmd: /oscs/9/freq
state_quant: Oscillators - advanced
state_value_1: 10
state_value_2: 11
state_value_3: 12
state_value_4: 13
state_value_5: 14
state_value_6: 15
state_value_7: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 11]
label: Frequency 11
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/10/freq</b></p></body></html>
set_cmd: /oscs/10/freq
get_cmd: /oscs/10/freq
state_quant: Oscillators - advanced
state_value_1: 11
state_value_2: 12
state_value_3: 13
state_value_4: 14
state_value_5: 15
state_value_6: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 12]
label: Frequency 12
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/11/freq</b></p></body></html>
set_cmd: /oscs/11/freq
get_cmd: /oscs/11/freq
state_quant: Oscillators - advanced
state_value_1: 12
state_value_2: 13
state_value_3: 14
state_value_4: 15
state_value_5: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 13]
label: Frequency 13
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/12/freq</b></p></body></html>
set_cmd: /oscs/12/freq
get_cmd: /oscs/12/freq
state_quant: Oscillators - advanced
state_value_1: 13
state_value_2: 14
state_value_3: 15
state_value_4: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 14]
label: Frequency 14
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/13/freq</b></p></body></html>
set_cmd: /oscs/13/freq
get_cmd: /oscs/13/freq
state_quant: Oscillators - advanced
state_value_1: 14
state_value_2: 15
state_value_3: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 15]
label: Frequency 15
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/14/freq</b></p></body></html>
set_cmd: /oscs/14/freq
get_cmd: /oscs/14/freq
state_quant: Oscillators - advanced
state_value_1: 15
state_value_2: 16
model_value_1: HDAWG8 (advanced)

[Oscillators - Frequency 16]
label: Frequency 16
datatype: DOUBLE
section: Oscillator/Sines
group: Oscillators
def_value: 10e6
unit: Hz
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Frequency control for each oscillator.<br/><b>oscs/15/freq</b></p></body></html>
set_cmd: /oscs/15/freq
get_cmd: /oscs/15/freq
state_quant: Oscillators - advanced
state_value_1: 16
model_value_1: HDAWG8 (advanced)

#########################################
# SECTION: Sine Generators
# GROUP: Sine 1

[Sine 1 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 1
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/0/oscselect</b></p></body></html>
set_cmd: /sines/0/oscselect
get_cmd: /sines/0/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 1 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 1
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/0/harmonic</b></p></body></html>
set_cmd: /sines/0/harmonic
get_cmd: /sines/0/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 1 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 1
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/0/phaseshift</b></p></body></html>
set_cmd: /sines/0/phaseshift
get_cmd: /sines/0/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 2

[Sine 2 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 2
def_value: 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/1/oscselect</b></p></body></html>
set_cmd: /sines/1/oscselect
get_cmd: /sines/1/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 2 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 2
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/1/harmonic</b></p></body></html>
set_cmd: /sines/1/harmonic
get_cmd: /sines/1/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 2 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 2
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/1/phaseshift</b></p></body></html>
set_cmd: /sines/1/phaseshift
get_cmd: /sines/1/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 3

[Sine 3 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 3
def_value: 3
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/2/oscselect</b></p></body></html>
set_cmd: /sines/2/oscselect
get_cmd: /sines/2/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 3 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 3
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/2/harmonic</b></p></body></html>
set_cmd: /sines/2/harmonic
get_cmd: /sines/2/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 3 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 3
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/2/phaseshift</b></p></body></html>
set_cmd: /sines/2/phaseshift
get_cmd: /sines/2/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 4

[Sine 4 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 4
def_value: 4
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/3/oscselect</b></p></body></html>
set_cmd: /sines/3/oscselect
get_cmd: /sines/3/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 4 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 4
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/3/harmonic</b></p></body></html>
set_cmd: /sines/3/harmonic
get_cmd: /sines/3/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 4 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 4
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/3/phaseshift</b></p></body></html>
set_cmd: /sines/3/phaseshift
get_cmd: /sines/3/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 5

[Sine 5 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 5
def_value: 5
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/4/oscselect</b></p></body></html>
set_cmd: /sines/4/oscselect
get_cmd: /sines/4/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 5 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 5
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/4/harmonic</b></p></body></html>
set_cmd: /sines/4/harmonic
get_cmd: /sines/4/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 5 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 5
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/4/phaseshift</b></p></body></html>
set_cmd: /sines/4/phaseshift
get_cmd: /sines/4/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 6

[Sine 6 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 6
def_value: 6
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/5/oscselect</b></p></body></html>
set_cmd: /sines/5/oscselect
get_cmd: /sines/5/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 6 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 6
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/5/harmonic</b></p></body></html>
set_cmd: /sines/5/harmonic
get_cmd: /sines/5/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 6 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 6
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/5/phaseshift</b></p></body></html>
set_cmd: /sines/5/phaseshift
get_cmd: /sines/5/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 7

[Sine 7 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 7
def_value: 7
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/6/oscselect</b></p></body></html>
set_cmd: /sines/6/oscselect
get_cmd: /sines/6/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 7 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 7
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/6/harmonic</b></p></body></html>
set_cmd: /sines/6/harmonic
get_cmd: /sines/6/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 7 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 7
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/6/phaseshift</b></p></body></html>
set_cmd: /sines/6/phaseshift
get_cmd: /sines/6/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sine Generators
# GROUP: Sine 8

[Sine 8 - Oscillator]
label: Oscillator
datatype: COMBO
section: Oscillator/Sines
group: Sine 8
def_value: 8
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select oscillator for generation of this sine signal.<br/><b>sines/7/oscselect</b></p></body></html>
set_cmd: /sines/7/oscselect
get_cmd: /sines/7/oscselect
cmd_def_1: 0
combo_def_1: 1
cmd_def_2: 1
combo_def_2: 2
cmd_def_3: 2
combo_def_3: 3
cmd_def_4: 3
combo_def_4: 4
cmd_def_5: 4
combo_def_5: 5
cmd_def_6: 5
combo_def_6: 6
cmd_def_7: 6
combo_def_7: 7
cmd_def_8: 7
combo_def_8: 8
cmd_def_9: 8
combo_def_9: 9
cmd_def_10: 9
combo_def_10: 10
cmd_def_11: 10
combo_def_11: 11
cmd_def_12: 11
combo_def_12: 12
cmd_def_13: 12
combo_def_13: 13
cmd_def_14: 13
combo_def_14: 14
cmd_def_15: 14
combo_def_15: 15
cmd_def_16: 15
combo_def_16: 16
model_value_1: HDAWG8 (advanced)

[Sine 8 - Harmonic]
label: Harmonic
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 8
def_value: 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Multiplies the sine signals reference frequency with the integer factor defined by this field.<br/><b>sines/7/harmonic</b></p></body></html>
set_cmd: /sines/7/harmonic
get_cmd: /sines/7/harmonic
model_value_1: HDAWG8 (advanced)

[Sine 8 - Phase]
label: Phase
datatype: DOUBLE
section: Oscillator/Sines
group: Sine 8
def_value: 0.0
unit: deg
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Phase shift applied to sine signal.<br/><b>sines/7/phaseshift</b></p></body></html>
set_cmd: /sines/7/phaseshift
get_cmd: /sines/7/phaseshift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sequencer
# GROUP: AWG 1-2

[Sequencer - Run]
label: Run
datatype: BUTTON
section: Sequencer
group: Control
show_in_measurement_dlg: True
def_value: false
tooltip: <html><head/><body><p>Activates the AWG.<br/><b>awgs/0/enable</b></p></body></html>

[Sequencer - Output 1]
label: Output 1
datatype: BOOLEAN
section: Sequencer
group: Control
show_in_measurement_dlg: True
set_cmd: /sigouts/0/on
get_cmd: /sigouts/0/on
def_value: false


[Sequencer - Output 2]
label: Output 2
datatype: BOOLEAN
section: Sequencer
group: Control
show_in_measurement_dlg: True
set_cmd: /sigouts/1/on
get_cmd: /sigouts/1/on
def_value: false


[Sequencer - Rerun]
label: Rerun
datatype: COMBO
section: Sequencer
group: Sequencer
def_value: Off
show_in_measurement_dlg: False
tooltip: Reruns the Sequencer program continuously. This way of looping a program results in timing jitter. For a jitter free signal implement a loop directly in the sequence program.
set_cmd: /awgs/0/single
get_cmd: /awgs/0/single
cmd_def_1: 0
combo_def_1: On
cmd_def_2: 1
combo_def_2: Off

#########################################
# SECTION: Sequencer
# GROUP: Wave 1

[Wave 1 - Gain 11]
label: Gain 11
datatype: DOUBLE
section: Sequencer
group: Wave 1
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/0/gains/0
get_cmd: /awgs/0/outputs/0/gains/0
model_value_1: HDAWG8 (advanced)

[Wave 1 - Gain 12]
label: Gain 12
datatype: DOUBLE
section: Sequencer
group: Wave 1
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/0/gains/1
get_cmd: /awgs/0/outputs/0/gains/1
model_value_1: HDAWG8 (advanced)

[Wave 1 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer
group: Wave 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/0/outputs/0/hold</b></p></body></html>
set_cmd: /awgs/0/outputs/0/hold
get_cmd: /awgs/0/outputs/0/hold
model_value_1: HDAWG8 (advanced)

[Wave 1 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer
group: Wave 1
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/0/outputs/0/modulation/mode</b></p></body></html>
set_cmd: /awgs/0/outputs/0/modulation/mode
get_cmd: /awgs/0/outputs/0/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 11
cmd_def_3: 2
combo_def_3: Sine 22
cmd_def_4: 3
combo_def_4: Sine 12
cmd_def_5: 4
combo_def_5: Sine 21
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

[Wave 1 - Enable Sine 1]
label: Enable Sine 1
datatype: BOOLEAN
section: Sequencer
group: Wave 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/enables/0</b></p></body></html>
set_cmd: /sines/0/enables/0
get_cmd: /sines/0/enables/0
model_value_1: HDAWG8 (advanced)

[Wave 1 - Amplitude Sine 1]
label: Amplitude Sine 1
datatype: DOUBLE
section: Sequencer
group: Wave 1
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/amplitudes/0</b></p></body></html>
set_cmd: /sines/0/amplitudes/0
get_cmd: /sines/0/amplitudes/0
state_quant: Wave 1 - Enable Sine 1
state_value_1: true
model_value_1: HDAWG8 (advanced)

[Wave 1 - Enable Sine 2]
label: Enable Sine 2
datatype: BOOLEAN
section: Sequencer
group: Wave 1
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/enables/1</b></p></body></html>
set_cmd: /sines/0/enables/1
get_cmd: /sines/0/enables/1
model_value_1: HDAWG8 (advanced)

[Wave 1 - Amplitude Sine 2]
label: Amplitude Sine 2
datatype: DOUBLE
section: Sequencer
group: Wave 1
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/0/amplitudes/1</b></p></body></html>
set_cmd: /sines/0/amplitudes/1
get_cmd: /sines/0/amplitudes/1
state_quant: Wave 1 - Enable Sine 2
state_value_1: true
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sequencer
# GROUP: Wave 2

[Wave 2 - Gain 21]
label: Gain 21
datatype: DOUBLE
section: Sequencer
group: Wave 2
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/1/gains/0
get_cmd: /awgs/0/outputs/1/gains/0
model_value_1: HDAWG8 (advanced)

[Wave 2 - Gain 22]
label: Gain 22
datatype: DOUBLE
section: Sequencer
group: Wave 2
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/0/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/0/outputs/1/gains/1
get_cmd: /awgs/0/outputs/1/gains/1
model_value_1: HDAWG8 (advanced)

[Wave 2 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer
group: Wave 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/0/outputs/1/hold</b></p></body></html>
set_cmd: /awgs/0/outputs/1/hold
get_cmd: /awgs/0/outputs/1/hold
model_value_1: HDAWG8 (advanced)

[Wave 2 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer
group: Wave 2
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/0/outputs/1/modulation/mode</b></p></body></html>
set_cmd: /awgs/0/outputs/1/modulation/mode
get_cmd: /awgs/0/outputs/1/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 11
cmd_def_3: 2
combo_def_3: Sine 22
cmd_def_4: 3
combo_def_4: Sine 12
cmd_def_5: 4
combo_def_5: Sine 21
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

[Wave 2 - Enable Sine 1]
label: Enable Sine 1
datatype: BOOLEAN
section: Sequencer
group: Wave 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/1/enables/0</b></p></body></html>
set_cmd: /sines/1/enables/0
get_cmd: /sines/1/enables/0
model_value_1: HDAWG8 (advanced)

[Wave 2 - Amplitude Sine 1]
label: Amplitude Sine 1
datatype: DOUBLE
section: Sequencer
group: Wave 2
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/1/amplitudes/0</b></p></body></html>
set_cmd: /sines/1/amplitudes/0
get_cmd: /sines/1/amplitudes/0
state_quant: Wave 2 - Enable Sine 1
state_value_1: true
model_value_1: HDAWG8 (advanced)

[Wave 2 - Enable Sine 2]
label: Enable Sine 2
datatype: BOOLEAN
section: Sequencer
group: Wave 2
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/1/enables/1</b></p></body></html>
set_cmd: /sines/1/enables/1
get_cmd: /sines/1/enables/1
model_value_1: HDAWG8 (advanced)

[Wave 2 - Amplitude Sine 2]
label: Amplitude Sine 2
datatype: DOUBLE
section: Sequencer
group: Wave 2
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/1/amplitudes/1</b></p></body></html>
set_cmd: /sines/1/amplitudes/1
get_cmd: /sines/1/amplitudes/1
state_quant: Wave 2 - Enable Sine 2
state_value_1: true
model_value_1: HDAWG8 (advanced)

#########################################
# SECTION: Sequencer
# GROUP: Wave 3

[Wave 3 - Gain 31]
label: Gain 31
datatype: DOUBLE
section: Sequencer
group: Wave 3
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/1/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/1/outputs/0/gains/0
get_cmd: /awgs/1/outputs/0/gains/0
model_value_1: HDAWG8 (advanced)

[Wave 3 - Gain 32]
label: Gain 32
datatype: DOUBLE
section: Sequencer
group: Wave 3
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/1/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/1/outputs/0/gains/1
get_cmd: /awgs/1/outputs/0/gains/1
model_value_1: HDAWG8 (advanced)

[Wave 3 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer
group: Wave 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/1/outputs/0/hold</b></p></body></html>
set_cmd: /awgs/1/outputs/0/hold
get_cmd: /awgs/1/outputs/0/hold
model_value_1: HDAWG8 (advanced)

[Wave 3 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer
group: Wave 3
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/1/outputs/0/modulation/mode</b></p></body></html>
set_cmd: /awgs/1/outputs/0/modulation/mode
get_cmd: /awgs/1/outputs/0/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 31
cmd_def_3: 2
combo_def_3: Sine 42
cmd_def_4: 3
combo_def_4: Sine 32
cmd_def_5: 4
combo_def_5: Sine 41
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

[Wave 3 - Enable Sine 3]
label: Enable Sine 3
datatype: BOOLEAN
section: Sequencer
group: Wave 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/2/enables/0</b></p></body></html>
set_cmd: /sines/2/enables/0
get_cmd: /sines/2/enables/0
model_value_1: HDAWG8 (advanced)

[Wave 3 - Amplitude Sine 3]
label: Amplitude Sine 3
datatype: DOUBLE
section: Sequencer
group: Wave 3
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/2/amplitudes/0</b></p></body></html>
set_cmd: /sines/2/amplitudes/0
get_cmd: /sines/2/amplitudes/0
state_quant: Wave 3 - Enable Sine 3
state_value_1: true
model_value_1: HDAWG8 (advanced)

[Wave 3 - Enable Sine 4]
label: Enable Sine 4
datatype: BOOLEAN
section: Sequencer
group: Wave 3
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/2/enables/1</b></p></body></html>
set_cmd: /sines/2/enables/1
get_cmd: /sines/2/enables/1
model_value_1: HDAWG8 (advanced)

[Wave 3 - Amplitude Sine 4]
label: Amplitude Sine 4
datatype: DOUBLE
section: Sequencer
group: Wave 3
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/2/amplitudes/1</b></p></body></html>
set_cmd: /sines/2/amplitudes/1
get_cmd: /sines/2/amplitudes/1
state_quant: Wave 3 - Enable Sine 4
state_value_1: true
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Sequencer
# GROUP: Wave 4

[Wave 4 - Gain 41]
label: Gain 41
datatype: DOUBLE
section: Sequencer
group: Wave 4
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/1/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/1/outputs/1/gains/0
get_cmd: /awgs/1/outputs/1/gains/0
model_value_1: HDAWG8 (advanced)

[Wave 4 - Gain 42]
label: Gain 42
datatype: DOUBLE
section: Sequencer
group: Wave 4
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Amplitude in units of full scale of the given AWG Output. The full scale corresponds to the Range voltage setting of the Signal Outputs.<br/><b>awgs/1/outputs/0/amplitude</b></p></body></html>
set_cmd: /awgs/1/outputs/1/gains/1
get_cmd: /awgs/1/outputs/1/gains/1
model_value_1: HDAWG8 (advanced)

[Wave 4 - Hold]
label: Hold
datatype: BOOLEAN
section: Sequencer
group: Wave 4
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Keep the last sample (constant) on the output even after the waveform program finishes.<br/><b>awgs/1/outputs/1/hold</b></p></body></html>
set_cmd: /awgs/1/outputs/1/hold
get_cmd: /awgs/1/outputs/1/hold
model_value_1: HDAWG8 (advanced)

[Wave 4 - Modulation]
label: Modulation
datatype: COMBO
section: Sequencer
group: Wave 4
def_value: Off
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select modulation mode between off, sine modulation and advanced.<br/><b>awgs/1/outputs/1/modulation/mode</b></p></body></html>
set_cmd: /awgs/1/outputs/1/modulation/mode
get_cmd: /awgs/1/outputs/1/modulation/mode
cmd_def_1: 0
combo_def_1: Off
cmd_def_2: 1
combo_def_2: Sine 31
cmd_def_3: 2
combo_def_3: Sine 42
cmd_def_4: 3
combo_def_4: Sine 32
cmd_def_5: 4
combo_def_5: Sine 41
cmd_def_6: 5
combo_def_6: Advanced
model_value_1: HDAWG8 (advanced)

[Wave 4 - Enable Sine 3]
label: Enable Sine 3
datatype: BOOLEAN
section: Sequencer
group: Wave 4
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/3/enables/0</b></p></body></html>
set_cmd: /sines/3/enables/0
get_cmd: /sines/3/enables/0
model_value_1: HDAWG8 (advanced)

[Wave 4 - Amplitude Sine 3]
label: Amplitude Sine 3
datatype: DOUBLE
section: Sequencer
group: Wave 4
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/3/amplitudes/0</b></p></body></html>
set_cmd: /sines/3/amplitudes/0
get_cmd: /sines/3/amplitudes/0
state_quant: Wave 4 - Enable Sine 3
state_value_1: true
model_value_1: HDAWG8 (advanced)

[Wave 4 - Enable Sine 4]
label: Enable Sine 4
datatype: BOOLEAN
section: Sequencer
group: Wave 4
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables the sine signal to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/3/enables/1</b></p></body></html>
set_cmd: /sines/3/enables/1
get_cmd: /sines/3/enables/1
model_value_1: HDAWG8 (advanced)

[Wave 4 - Amplitude Sine 4]
label: Amplitude Sine 4
datatype: DOUBLE
section: Sequencer
group: Wave 4
def_value: 1.0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the peak amplitude that the sine signal contributes to the signal output. Note that the last index is either 0 or 1 and will map to the pair of outputs given by the first index. (e.g. sines/3/amplitudes/0 corresponds to wave output 2)<br/><b>sines/3/amplitudes/1</b></p></body></html>
set_cmd: /sines/3/amplitudes/1
get_cmd: /sines/3/amplitudes/1
state_quant: Wave 4 - Enable Sine 4
state_value_1: true
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: Triggers
# GROUP: Triggers Group 1

[Sequencer - Trigger 1]
label: Trigger 1
datatype: COMBO
section: Sequencer
group: Triggers
def_value: Trigger In 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the digital trigger source signal.<br/><b>awgs/0/auxtriggers/0/channel</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/0/channel
get_cmd: /awgs/0/auxtriggers/0/channel
cmd_def_1: 0
combo_def_1: Trigger In 1
cmd_def_2: 1
combo_def_2: Trigger In 2
cmd_def_3: 2
combo_def_3: Trigger In 3
cmd_def_4: 3
combo_def_4: Trigger In 4
cmd_def_5: 4
combo_def_5: Trigger In 5
cmd_def_6: 5
combo_def_6: Trigger In 6
cmd_def_7: 6
combo_def_7: Trigger In 7
cmd_def_8: 7
combo_def_8: Trigger In 8
model_value_1: HDAWG8 (advanced)

[Sequencer - Slope 1]
label: Slope 1
datatype: COMBO
section: Sequencer
group: Triggers
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.<br/><b>awgs/0/auxtriggers/0/slope</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/0/slope
get_cmd: /awgs/0/auxtriggers/0/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)

[Sequencer - Trigger 2]
label: Trigger 2
datatype: COMBO
section: Sequencer
group: Triggers
def_value: Trigger In 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the digital trigger source signal.<br/><b>awgs/0/auxtriggers/1/channel</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/1/channel
get_cmd: /awgs/0/auxtriggers/1/channel
cmd_def_1: 0
combo_def_1: Trigger In 1
cmd_def_2: 1
combo_def_2: Trigger In 2
cmd_def_3: 2
combo_def_3: Trigger In 3
cmd_def_4: 3
combo_def_4: Trigger In 4
cmd_def_5: 4
combo_def_5: Trigger In 5
cmd_def_6: 5
combo_def_6: Trigger In 6
cmd_def_7: 6
combo_def_7: Trigger In 7
cmd_def_8: 7
combo_def_8: Trigger In 8
model_value_1: HDAWG8 (advanced)


[Sequencer - Slope 2]
label: Slope 2
datatype: COMBO
section: Sequencer
group: Triggers
def_value: Level
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the trigger. The trigger will be level sensitive when the Level option is selected.<br/><b>awgs/0/auxtriggers/1/slope</b></p></body></html>
set_cmd: /awgs/0/auxtriggers/1/slope
get_cmd: /awgs/0/auxtriggers/1/slope
cmd_def_1: 0
combo_def_1: Level
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer - Strobe Index]
label: Strobe Index
datatype: DOUBLE
section: Sequencer
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a trigger for the playback of a wave in connecton with waitDIOTrigger().<br/><b>awgs/0/dio/strobe/index</b></p></body></html>
set_cmd: /awgs/0/dio/strobe/index
get_cmd: /awgs/0/dio/strobe/index
model_value_1: HDAWG8 (advanced)


[Sequencer - Strobe Slope]
label: Strobe Slope
datatype: COMBO
section: Sequencer
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Select the signal edge that should activate the strobe trigger.<br/><b>awgs/0/dio/strobe/slope</b></p></body></html>
set_cmd: /awgs/0/dio/strobe/slope
get_cmd: /awgs/0/dio/strobe/slope
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Rising
cmd_def_3: 2
combo_def_3: Falling
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer - Valid Index]
label: Valid Index
datatype: DOUBLE
section: Sequencer
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO index to be used as a valid bit.<br/><b>awgs/0/dio/valid/index</b></p></body></html>
set_cmd: /awgs/0/dio/valid/index
get_cmd: /awgs/0/dio/valid/index
model_value_1: HDAWG8 (advanced)


[Sequencer - Valid Polarity]
label: Valid Polarity
datatype: COMBO
section: Sequencer
group: DIO Trigger
def_value: None
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Polarity of the VALID bit that indicates that a codeword is available on the bus.<br/><b>awgs/0/dio/valid/polarity</b></p></body></html>
set_cmd: /awgs/0/dio/valid/polarity
get_cmd: /awgs/0/dio/valid/polarity
cmd_def_1: 0
combo_def_1: None
cmd_def_2: 1
combo_def_2: Low
cmd_def_3: 2
combo_def_3: High
cmd_def_4: 3
combo_def_4: Both
model_value_1: HDAWG8 (advanced)


[Sequencer - Codeword Mask]
label: Codeword Mask
datatype: DOUBLE
section: Sequencer
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Selects the DIO bits to be used for waveform selection in connection with playWaveDIO().<br/><b>awgs/0/dio/mask/value</b></p></body></html>
set_cmd: /awgs/0/dio/mask/value
get_cmd: /awgs/0/dio/mask/value
model_value_1: HDAWG8 (advanced)


[Sequencer - Codeword Shift]
label: Codeword Shift
datatype: DOUBLE
section: Sequencer
group: DIO Trigger
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Defines the amount of bit shifting to apply for the DIO wave selection.<br/><b>awgs/0/dio/mask/shift</b></p></body></html>
set_cmd: /awgs/0/dio/mask/shift
get_cmd: /awgs/0/dio/mask/shift
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: DIO
# GROUP: Trigger In

[Trigger In - advanced]
section: DIO
group: Trigger In
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
model_value_1: HDAWG8 (advanced)

[Trigger In - 1 Level]
label: 1 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/0/level</b></p></body></html>
set_cmd: /triggers/in/0/level
get_cmd: /triggers/in/0/level
state_quant: Trigger In - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 1 50 Ohm]
label: 1 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/0/imp50</b></p></body></html>
set_cmd: /triggers/in/0/imp50
get_cmd: /triggers/in/0/imp50
state_quant: Trigger In - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 2 Level]
label: 2 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/1/level</b></p></body></html>
set_cmd: /triggers/in/1/level
get_cmd: /triggers/in/1/level
state_quant: Trigger In - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 2 50 Ohm]
label: 2 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/1/imp50</b></p></body></html>
set_cmd: /triggers/in/1/imp50
get_cmd: /triggers/in/1/imp50
state_quant: Trigger In - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 3 Level]
label: 3 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/2/level</b></p></body></html>
set_cmd: /triggers/in/2/level
get_cmd: /triggers/in/2/level
state_quant: Trigger In - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 3 50 Ohm]
label: 3 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/2/imp50</b></p></body></html>
set_cmd: /triggers/in/2/imp50
get_cmd: /triggers/in/2/imp50
state_quant: Trigger In - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 4 Level]
label: 4 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/3/level</b></p></body></html>
set_cmd: /triggers/in/3/level
get_cmd: /triggers/in/3/level
state_quant: Trigger In - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 4 50 Ohm]
label: 4 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/3/imp50</b></p></body></html>
set_cmd: /triggers/in/3/imp50
get_cmd: /triggers/in/3/imp50
state_quant: Trigger In - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 5 Level]
label: 5 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/4/level</b></p></body></html>
set_cmd: /triggers/in/4/level
get_cmd: /triggers/in/4/level
state_quant: Trigger In - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 5 50 Ohm]
label: 5 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/4/imp50</b></p></body></html>
set_cmd: /triggers/in/4/imp50
get_cmd: /triggers/in/4/imp50
state_quant: Trigger In - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 6 Level]
label: 6 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/5/level</b></p></body></html>
set_cmd: /triggers/in/5/level
get_cmd: /triggers/in/5/level
state_quant: Trigger In - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 6 50 Ohm]
label: 6 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/5/imp50</b></p></body></html>
set_cmd: /triggers/in/5/imp50
get_cmd: /triggers/in/5/imp50
state_quant: Trigger In - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 7 Level]
label: 7 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/6/level</b></p></body></html>
set_cmd: /triggers/in/6/level
get_cmd: /triggers/in/6/level
state_quant: Trigger In - advanced
state_value_1: 7
state_value_2: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 7 50 Ohm]
label: 7 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/6/imp50</b></p></body></html>
set_cmd: /triggers/in/6/imp50
get_cmd: /triggers/in/6/imp50
state_quant: Trigger In - advanced
state_value_1: 7
state_value_2: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 8 Level]
label: 8 Level
datatype: DOUBLE
section: DIO
group: Trigger In
def_value: 1.0
unit: V
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger voltage level at which the trigger input toggles between low and high. Use 50% amplitude for digital input and consider the trigger hysteresis.<br/><b>triggers/in/7/level</b></p></body></html>
set_cmd: /triggers/in/7/level
get_cmd: /triggers/in/7/level
state_quant: Trigger In - advanced
state_value_1: 8
model_value_1: HDAWG8 (advanced)

[Trigger In - 8 50 Ohm]
label: 8 50 Ohm
datatype: BOOLEAN
section: DIO
group: Trigger In
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger input impedance: When on, the trigger input impedance is 50 Ohm, when off 1 k Ohm.<br/><b>triggers/in/7/imp50</b></p></body></html>
set_cmd: /triggers/in/7/imp50
get_cmd: /triggers/in/7/imp50
state_quant: Trigger In - advanced
state_value_1: 8
model_value_1: HDAWG8 (advanced)

#########################################
# SECTION: DIO
# GROUP: Trigger Stream

[Trigger Stream - Enable 1]
label: Enable 1
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/0/enable</b></p></body></html>
set_cmd: /triggers/streams/0/enable
get_cmd: /triggers/streams/0/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 1]
label: Holdoff 1
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/0/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/0/holdofftime
get_cmd: /triggers/streams/0/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 1]
label: Source 1
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/0/mask</b></p></body></html>
set_cmd: /triggers/streams/0/mask
get_cmd: /triggers/streams/0/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Enable 2]
label: Enable 2
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/1/enable</b></p></body></html>
set_cmd: /triggers/streams/1/enable
get_cmd: /triggers/streams/1/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 2]
label: Holdoff 2
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/1/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/1/holdofftime
get_cmd: /triggers/streams/1/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 2]
label: Source 2
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 3
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/1/mask</b></p></body></html>
set_cmd: /triggers/streams/1/mask
get_cmd: /triggers/streams/1/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Enable 3]
label: Enable 3
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/2/enable</b></p></body></html>
set_cmd: /triggers/streams/2/enable
get_cmd: /triggers/streams/2/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 3]
label: Holdoff 3
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/2/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/2/holdofftime
get_cmd: /triggers/streams/2/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 3]
label: Source 3
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 5
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/2/mask</b></p></body></html>
set_cmd: /triggers/streams/2/mask
get_cmd: /triggers/streams/2/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Enable 4]
label: Enable 4
datatype: BOOLEAN
section: DIO
group: Trigger Stream
def_value: false
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Enables trigger streaming.<br/><b>triggers/streams/3/enable</b></p></body></html>
set_cmd: /triggers/streams/3/enable
get_cmd: /triggers/streams/3/enable
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Holdoff 4]
label: Holdoff 4
datatype: DOUBLE
section: DIO
group: Trigger Stream
def_value: 0.001
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the holdoff time of the trigger unit.<br/><b>triggers/streams/3/holdofftime</b></p></body></html>
set_cmd: /triggers/streams/3/holdofftime
get_cmd: /triggers/streams/3/holdofftime
model_value_1: HDAWG8 (advanced)

[Trigger Stream - Source 4]
label: Source 4
datatype: COMBO
section: DIO
group: Trigger Stream
def_value: Trigger Input 7
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Masks triggers for the current stream. The mask is bit encoded where bit 0..7 are the input triggers and bit 8..11 are AWG triggers.<br/><b>triggers/streams/3/mask</b></p></body></html>
set_cmd: /triggers/streams/3/mask
get_cmd: /triggers/streams/3/mask
cmd_def_1: 1
combo_def_1: Trigger Input 1
cmd_def_2: 2
combo_def_2: Trigger Input 2
cmd_def_3: 4
combo_def_3: Trigger Input 3
cmd_def_4: 8
combo_def_4: Trigger Input 4
cmd_def_5: 16
combo_def_5: Trigger Input 5
cmd_def_6: 32
combo_def_6: Trigger Input 6
cmd_def_7: 64
combo_def_7: Trigger Input 7
cmd_def_8: 128
combo_def_8: Trigger Input 8
cmd_def_9: 256
combo_def_9: AWG Trigger 1
cmd_def_10: 512
combo_def_10: AWG Trigger 2
cmd_def_11: 1024
combo_def_11: AWG Trigger 3
cmd_def_12: 2048
combo_def_12: AWG Trigger 4
model_value_1: HDAWG8 (advanced)

#########################################
# SECTION: DIO
# GROUP: Marker Out

[Marker Out - advanced]
section: DIO
group: Marker Out
label: Show
datatype: COMBO
combo_def_1: 0
combo_def_2: 1
combo_def_3: 2
combo_def_4: 3
combo_def_5: 4
combo_def_6: 5
combo_def_7: 6
combo_def_8: 7
combo_def_9: 8
def_value: 1
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 1]
label: Signal 1
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/0/source</b></p></body></html>
set_cmd: /triggers/out/0/source
get_cmd: /triggers/out/0/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 1]
label: Delay 1
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/0/delay</b></p></body></html>
set_cmd: /triggers/out/0/delay
get_cmd: /triggers/out/0/delay
state_quant: Marker Out - advanced
state_value_1: 1
state_value_2: 2
state_value_3: 3
state_value_4: 4
state_value_5: 5
state_value_6: 6
state_value_7: 7
state_value_8: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 2]
label: Signal 2
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/1/source</b></p></body></html>
set_cmd: /triggers/out/1/source
get_cmd: /triggers/out/1/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 2]
label: Delay 2
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/1/delay</b></p></body></html>
set_cmd: /triggers/out/1/delay
get_cmd: /triggers/out/1/delay
state_quant: Marker Out - advanced
state_value_1: 2
state_value_2: 3
state_value_3: 4
state_value_4: 5
state_value_5: 6
state_value_6: 7
state_value_7: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 3]
label: Signal 3
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/2/source</b></p></body></html>
set_cmd: /triggers/out/2/source
get_cmd: /triggers/out/2/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 3]
label: Delay 3
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/2/delay</b></p></body></html>
set_cmd: /triggers/out/2/delay
get_cmd: /triggers/out/2/delay
state_quant: Marker Out - advanced
state_value_1: 3
state_value_2: 4
state_value_3: 5
state_value_4: 6
state_value_5: 7
state_value_6: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 4]
label: Signal 4
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/3/source</b></p></body></html>
set_cmd: /triggers/out/3/source
get_cmd: /triggers/out/3/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 4]
label: Delay 4
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/3/delay</b></p></body></html>
set_cmd: /triggers/out/3/delay
get_cmd: /triggers/out/3/delay
state_quant: Marker Out - advanced
state_value_1: 4
state_value_2: 5
state_value_3: 6
state_value_4: 7
state_value_5: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 5]
label: Signal 5
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/4/source</b></p></body></html>
set_cmd: /triggers/out/4/source
get_cmd: /triggers/out/4/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 5]
label: Delay 5
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/4/delay</b></p></body></html>
set_cmd: /triggers/out/4/delay
get_cmd: /triggers/out/4/delay
state_quant: Marker Out - advanced
state_value_1: 5
state_value_2: 6
state_value_3: 7
state_value_4: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 6]
label: Signal 6
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/5/source</b></p></body></html>
set_cmd: /triggers/out/5/source
get_cmd: /triggers/out/5/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 6]
label: Delay 6
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/5/delay</b></p></body></html>
set_cmd: /triggers/out/5/delay
get_cmd: /triggers/out/5/delay
state_quant: Marker Out - advanced
state_value_1: 6
state_value_2: 7
state_value_3: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 7]
label: Signal 7
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 1
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/6/source</b></p></body></html>
set_cmd: /triggers/out/6/source
get_cmd: /triggers/out/6/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 7
state_value_2: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 7]
label: Delay 7
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/6/delay</b></p></body></html>
set_cmd: /triggers/out/6/delay
get_cmd: /triggers/out/6/delay
state_quant: Marker Out - advanced
state_value_1: 7
state_value_2: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Signal 8]
label: Signal 8
datatype: COMBO
section: DIO
group: Marker Out
def_value: AWG Trigger 2
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Assign a signal to a marker.<br/><b>triggers/out/7/source</b></p></body></html>
set_cmd: /triggers/out/7/source
get_cmd: /triggers/out/7/source
cmd_def_1: 0
combo_def_1: AWG Trigger 1
cmd_def_2: 1
combo_def_2: AWG Trigger 2
cmd_def_3: 2
combo_def_3: AWG Trigger 3
cmd_def_4: 3
combo_def_4: AWG Trigger 4
cmd_def_5: 4
combo_def_5: Output 1 Marker 1
cmd_def_6: 5
combo_def_6: Output 1 Marker 2
cmd_def_7: 6
combo_def_7: Output 2 Marker 1
cmd_def_8: 7
combo_def_8: Output 2 Marker 2
cmd_def_9: 8
combo_def_9: Trigger Input 1
cmd_def_10: 9
combo_def_10: Trigger Input 2
cmd_def_11: 10
combo_def_11: Trigger Input 3
cmd_def_12: 11
combo_def_12: Trigger Input 4
cmd_def_13: 12
combo_def_13: Trigger Input 5
cmd_def_14: 13
combo_def_14: Trigger Input 6
cmd_def_15: 14
combo_def_15: Trigger Input 7
cmd_def_16: 15
combo_def_16: Trigger Input 8
cmd_def_17: 16
combo_def_17: High
cmd_def_18: 17
combo_def_18: Low
state_quant: Marker Out - advanced
state_value_1: 8
model_value_1: HDAWG8 (advanced)

[Marker Out - Delay 8]
label: Delay 8
datatype: DOUBLE
section: DIO
group: Marker Out
def_value: 0.0
unit: s
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Trigger delay, controls the fine delay of the trigger output. The resolution is 78 ps.<br/><b>triggers/out/7/delay</b></p></body></html>
set_cmd: /triggers/out/7/delay
get_cmd: /triggers/out/7/delay
state_quant: Marker Out - advanced
state_value_1: 8
model_value_1: HDAWG8 (advanced)

#########################################
# SECTION: DIO
# GROUP: Digital I/O

[Digital I/O - Output]
label: Output
datatype: DOUBLE
section: DIO
group: Digital I/O
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>Sets the value of the DIO output for those bytes where 'drive' is enabled.<br/><b>dios/0/output</b></p></body></html>
set_cmd: /dios/0/output
get_cmd: /dios/0/output
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: DIO
# GROUP: Digital I/O

[Digital I/O - Drive]
label: Drive
datatype: DOUBLE
section: DIO
group: Digital I/O
def_value: 0
show_in_measurement_dlg: False
tooltip: <html><head/><body><p>When on (1), the corresponding 8-bit bus is in output mode. When off (0), it is in input mode. Bit 0 corresponds to the least significant byte. For example, the value 1 drives the least significant byte, the value 8 drives the most significant byte.<br/><b>dios/0/drive</b></p></body></html>
set_cmd: /dios/0/drive
get_cmd: /dios/0/drive
model_value_1: HDAWG8 (advanced)


#########################################
# SECTION: SeqPy
# GROUP: Compilation

[SeqPy - Json Path]
label: Json Path
datatype: PATH
section: SeqPy
group: Compilation

[SeqPy - Replace Index]
label: Replace Index
datatype: BOOLEAN
section: SeqPy
group: Compilation
def_value: False

[SeqPy - File Index]
label: File Index
datatype: DOUBLE
section: SeqPy
group: Compilation
def_value: 0

[Update AWG]
label: Compile
datatype: BUTTON
section: SeqPy
group: Compilation



#########################################
# SECTION: SeqPy
# GROUP: Sweepables

[SeqPy - Sweepable 1 Name]
label: Name 1
datatype: STRING
section: SeqPy
group: Sweepables
def_value: 

[SeqPy - Sweepable 1 Value]
label: Value 1
datatype: DOUBLE
section: SeqPy
group: Sweepables
def_value: 0

[SeqPy - Sweepable 2 Name]
label: Name 2
datatype: STRING
section: SeqPy
group: Sweepables
def_value: 

[SeqPy - Sweepable 2 Value]
label: Value 2
datatype: DOUBLE
section: SeqPy
group: Sweepables
def_value: 0

[SeqPy - Sweepable 3 Name]
label: Name 3
datatype: STRING
section: SeqPy
group: Sweepables
def_value: 

[SeqPy - Sweepable 3 Value]
label: Value 3
datatype: DOUBLE
section: SeqPy
group: Sweepables
def_value: 0

#########################################
# SECTION: SeqPy
# GROUP: Sequence

[SeqPy - Repetitions]
label: Repetitions
datatype: DOUBLE
def_value: 100
section: SeqPy
group: Sequence
show_in_measurement_dlg: True

[SeqPy - Period]
label: Period
datatype: DOUBLE
section: SeqPy
group: Sequence
def_value: 100e-6
unit: s
show_in_measurement_dlg: True

#########################################
# SECTION: SeqPy
# GROUP: Display

[Waveforms - Channel1]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel2]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel3]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel4]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel5]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel6]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel7]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Channel8]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s

[Waveforms - Marker]
datatype: VECTOR
section: SeqPy
group: Display
permission: READ
unit: V
x_name: Time
X_unit: s
